PsychoPy2experiment version="2021.1.4"
Settings
  Data file delimiter = semicolon
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Save csv file = True
  Save excel file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1680, 1049]
  expName = Lab2
  logging level = debug
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Routines
  Routine welcome_screen
    TextComponent welcome_message
      durationEstim = 3
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      text [set every repeat] = $welcome_messages[language]
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    KeyboardComponent next
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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
  Routine stroop_trial
    KeyboardComponent goto_next_trial
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = all keys
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    TextComponent word
      color [set every repeat] = $stroop_font_colors[stroop_test.thisN-1]
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $stroop_color_words[stroop_test.thisN-1]
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    MicrophoneComponent subj_answer
      channel = 0
      disabled = True
      startVal [time (s)] = 0.0
      stereo = False
      stopVal [duration (s)] = 3600
      syncScreenRefresh = True
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  Routine questionaire
    CodeComponent skip_if_ger
      Code Type = Py
      Begin Routine:
        if language == 'de' :
            continueRoutine = False
    TextComponent instructions_questionaire
      letterHeight = 0.04
      pos = (0, 0.30)
      startVal [time (s)] = 0.0
      text [set every repeat] = $PANAS_text[language]
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    RatingScaleComponent questionaire_answer_01
      disabled = True
      forceEndRoutine = True
      high = 4
      labels = Not at all, A little, Somewhat, Very Much So
      low = 0
      pos = 0, -0.4
      scaleDescription = $question
      singleClick = True
      size = 1.0
      startVal [time (s)] = 0.0
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    SliderComponent question_slider
      forceEndRoutine = True
      granularity = 1
      labels = "not at all", "a little", "moderatly", "quite a bit",  "extremely"
      letterHeight = 0.05
      pos = (0, -0.2)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = ['rating']
      ticks = (1, 2, 3, 4, 5)
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    TextComponent question_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $question
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  Routine instructions_n_back
    TextComponent text_instructions_n_back
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      text [set every repeat] = $nback_instruction_text[language]
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions_stroop
    TextComponent text_instructions_stroop
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      text [set every repeat] = $stroop_instruction_text[language]
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine stroop_time_pressure_trial
    TextComponent word_2
      color [set every repeat] = $stroop_font_colors[stroop_timepressure_trials.thisN]
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.8
      text [set every repeat] = $stroop_color_words[stroop_timepressure_trials.thisN]
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    MicrophoneComponent subj_answer_2
      channel = 0
      disabled = True
      startVal [time (s)] = 0.0
      stereo = False
      stopVal [duration (s)] = 0.8
      syncScreenRefresh = True
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  Routine stroop_dual_task_trial
    TextComponent word_3
      color [set every repeat] = $stroop_font_colors[stroop_dual_trials.thisN]
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $stroop_color_words[stroop_dual_trials.thisN]
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    SoundComponent sound_2
      saveStartStop = False
      sound [set every repeat] = $stroop_dual_beeps[stroop_dual_trials.thisN]
      startVal [time (s)] = 0.8
      stopVal [duration (s)] = 0.4
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    MicrophoneComponent subj_response_3
      channel = 0
      disabled = True
      startVal [time (s)] = 0.0
      stereo = False
      stopVal [duration (s)] = 1
      syncScreenRefresh = True
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    CodeComponent code_15
      Code Type = Py
      Begin Routine:
        if stroop_dual_beeps[stroop_dual_trials.thisN] == 2000:
                num_high_pitches += 1
  Routine reading_span_number
    CodeComponent render_number
      Code Type = Py
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      Begin Routine:
        curr_number = np.random.randint(1, 100)
        numbers_to_remember.append(curr_number)
    TextComponent number_to_remember
      letterHeight = 0.09
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $curr_number
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    KeyboardComponent key_resp_5
      allowedKeys = 'right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    TextComponent instructions_numbers
      letterHeight = 0.05
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $readingspan_number_text[language]
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  Routine reading_span_feedback
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.4
      text [set every repeat] = $correct[language] if reading_sentence_answer.corr == 1 else false[language]
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    CodeComponent code_17
      Code Type = Py
      End Routine:
        print("end reading span feedback")
        tN = -7
        try:
            tN = reading_span_trials.thisN
        except Exception as e:
            tN = -7
        print("Trial: " + str(tN))
  Routine reading_span_feedback_numbers
    TextComponent feedback
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $correct[language] if has_correct_answered else false[language] + reading_span_feedback_text[language] +str(corr_answer)
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  Routine instructions_stroop_time_pressure
    TextComponent text_instructions_stroop_timepressure
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $stroop_before_practice_timepressure_text[language]
    KeyboardComponent key_resp_8
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions_stroop_dual
    TextComponent text_instructions_stroop_dual
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      text [set every repeat] = $stroop_before_practice_dual_text[language]
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    KeyboardComponent key_resp_9
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine before_stroop_test
    CodeComponent select_colors
      Code Type = Py
      Begin Routine:
        stroop_shuffle_correct = False
        while(not stroop_shuffle_correct):
            stroop_shuffle_correct = True
            stroop_color_words = list(color_words['en'])
            stroop_font_colors = list(color_words['en'])
            np.random.shuffle(stroop_color_words)
            np.random.shuffle(stroop_font_colors)
            for i in range(len(stroop_color_words)):
                if stroop_color_words[i] == stroop_font_colors[i]:
                    stroop_shuffle_correct = False
        if language == 'de':
            for i in range(len(stroop_color_words)):
                stroop_color_words[i] = color_translation[stroop_color_words[i]]
  Routine eating_message
    TextComponent text_finish
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      text [set every repeat] = $eating_message_text[language]
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    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine finish_message
    TextComponent text_finished_message
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $finish_text[language]
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    KeyboardComponent end_study
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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
  Routine reading_span_text_2
    CodeComponent set_correct_answer_2
      Code Type = Py
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      Begin Routine:
        reading_span_correct_answer = "left" if correct_answer == "n" else "right"
      End Routine:
        print("stopping recording")
        reading_audio.stop()
        print("stopped recording")
    KeyboardComponent reading_sentence_answer
      allowedKeys = 'left','right'
      correctAns = $reading_span_correct_answer
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent sentence_2
      letterHeight = 0.09
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $silly_sentence
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    MicrophoneComponent reading_audio
      channel = 0
      startVal [time (s)] = 0.0
      stereo = False
      stopVal [duration (s)] = 3600
      syncScreenRefresh = True
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    TextComponent text_4
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $readingspan_sentence_text[language]
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    TextComponent reading_span_instructions_2
      letterHeight = 0.05
      pos = (-0.3, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $readingspan_arrows_text[language]
      wrapWidth = 20
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  Routine reading_span_say_numbers
    TextComponent instruction
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $readingspan_say_numbers_text[language]
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    KeyboardComponent key_resp_7
      allowedKeys = 'right','space', 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent set_correct_response
      Code Type = Py
      End Routine:
        corr_answer = numbers_to_remember.pop(0)
        print(textbox_enter_number.text)
        try:
            subj_answer = int(textbox_enter_number.text)
        except Exception as e:
            subj_answer = -1
        has_correct_answered = corr_answer == subj_answer
    TextboxComponent textbox_enter_number
      bold = False
      editable = True
      letterHeight = 0.05
      padding = None
      startVal [time (s)] = 0.0
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  Routine nasa_txl_questionaire
    TextComponent instructions_questionaire_2
      letterHeight = 0.05
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
      text [set every repeat] = $instruction_question
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    RatingScaleComponent questionaire_answer
      forceEndRoutine = True
      pos = 0, -0.4
      singleClick = True
      size = 1
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
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      customize_everything:
        stretch = 2,
        low = 0,
        high = 200,
        tickMarks = sorted({i*10 for i in range(21)}),
        labels = ['Low', '', '', '', '', '', '', '', '', '', '', '', '', '', '', '', '', '', '', '', 'High'],
        scale = None,
        singleClick = True,
        showAccept = False,
    SliderComponent question_slider_2
      disabled = True
      forceEndRoutine = True
      granularity = 1
      labels = "", "", "", "", "", "", "", "", "", "", "", "", "", "", "", "", "", "", "", ""
      letterHeight = 0.05
      pos = (0, -0.2)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = ['rating']
      ticks = (1, 1.5, 2, 2.5,  3, 3.5, 4, 4.5,  5, 5.5, 6, 6.5, 7, 7.5, 8, 8.5, 9, 9.5, 10)
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    TextComponent question_text_2
      letterHeight = 0.05
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $question
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    CodeComponent adapt_size_of_slider_labels_2
      Code Type = Py
      Begin Experiment:
        question_slider = visual.Slider(win=win, name='question_slider',
            size=(1.0, 0.1), pos=(0, -0.2), units=None,
            labels=["not at all", "slightly", "moderately", "very",  "extremely"], ticks=(1, 2, 3, 4, 5),
            granularity=1, style=('rating',),
            color='LightGray', font='HelveticaBold',
            flip=False, labelHeight=0.03)
      Begin Routine:
        if language == 'de':
            continueRoutine = False
    PolygonComponent polygon
      fillColor = $[1,1,1]
      lineWidth = 4
      ori = 90
      pos = [0,-0.180]
      saveStartStop = False
      shape = line
      size = (0.025, 0)
      startVal [time (s)] = 0.0
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  Routine start_mic_stroop
    CodeComponent start_mic
      Code Type = Py
      Begin Routine:
        stroop_mic = microphone.AdvAudioCapture(name='stroop_mic', saveDir=wavDirName, stereo=False, chnl=0)
        stroop_mic.record(sec=3600)
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  Routine start_mic_stroop_timepressure
    CodeComponent start_mic_2
      Code Type = Py
      Begin Routine:
        stroop_mic2 = microphone.AdvAudioCapture(name='stroop_mic_timepressure', saveDir=wavDirName, stereo=False, chnl=0)
        stroop_mic2.record(sec=3600)
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
  Routine start_mic_stroop_dual
    CodeComponent start_mic_3
      Code Type = Py
      Begin Routine:
        stroop_mic3 = microphone.AdvAudioCapture(name='stroop_mic_dual', saveDir=wavDirName, stereo=False, chnl=0)
        stroop_mic3.record(sec=3600)
  Routine short_break_timepressure
    TextComponent text_instructions_break_2
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      text [set every repeat] = $short_break_stroop_text[language]
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    KeyboardComponent key_resp_13
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_3
      Code Type = Py
      Begin Routine:
        import time

        time.sleep(1)
        stroop_mic2.stop()
  Routine short_break_dual
    TextComponent text_instructions_break_3
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      text [set every repeat] = $short_break_stroop_text[language]
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    KeyboardComponent key_resp_14
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_4
      Code Type = Py
      Begin Routine:
        import time

        time.sleep(1)
        stroop_mic3.stop()

        if stroop_dualtask_repetition.thisN == stroop_dualtask_repetition.nReps-1:
            continueRoutine = False
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
  Routine instruction_reading_span
    TextComponent text_8
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $instruction_readingspan_text[language]
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    KeyboardComponent key_resp_16
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine time_synchronisation
    TextComponent text_9
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      text [set every repeat] = $time_sync_text[language]
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    KeyboardComponent key_resp_17
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine before_reading_span_trial
    CodeComponent random_trials_count
      Code Type = Py
      Begin Experiment:
        c_numbers_to_remember = np.array([2, 3, 4, 5])

        rows_per_trial = np.sum(c_numbers_to_remember)

        reading_span_trial_count = 3

        all_rows_reading_span = np.arange(0, 126)
        shuffle(all_rows_reading_span)

        selected_rows_per_trial = list()
        for j in range(reading_span_trial_count):
            selected_rows_per_trial.append(all_rows_reading_span[rows_per_trial*j : rows_per_trial * (j+1)])
      Begin Routine:
        np.random.shuffle(c_numbers_to_remember)
  Routine before_reading_span_number
    CodeComponent select_sentences
      Code Type = Py
      Begin Routine:
        already_seen = 0
        for i in range(reading_span_trials.thisN):
            already_seen += c_numbers_to_remember[i]

        selected_rows_reading_span = selected_rows_per_trial[reading_span_whole_set.thisN][already_seen : already_seen + (c_numbers_to_remember[reading_span_trials.thisN])]

        numbers_to_remember = list()
  Routine before_stroop_practise
    CodeComponent code_8
      Code Type = Py
      Begin Routine:
        stroop_shuffle_correct = False
        while(not stroop_shuffle_correct):
            stroop_shuffle_correct = True
            stroop_color_words = list(color_words[language][:5])
            stroop_font_colors = list(color_words['en'][:5])
            np.random.shuffle(stroop_color_words)
            np.random.shuffle(stroop_font_colors)
            for i in range(len(stroop_color_words)):
                if stroop_color_words[i] == stroop_font_colors[i]:
                    stroop_shuffle_correct = False

        print(stroop_font_colors)
        print(stroop_color_words)
    KeyboardComponent key_resp_27
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_19
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $stroop_before_practice_text[language]
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  Routine short_break_and_mic_stop
    TextComponent text_instructions_break
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      text [set every repeat] = $short_break_stroop_text[language]
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    KeyboardComponent key_resp_10
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = Py
      Begin Routine:
        import time

        time.sleep(1)
        stroop_mic.stop()
  Routine short_break_after_stroop_practice
    TextComponent text_10
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $stroop_practice_break_text[language]
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    KeyboardComponent key_resp_18
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine audio_test
    TextComponent text_11
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $audio_test_text[language]
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    KeyboardComponent key_resp_20
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    MicrophoneComponent audio_test_mic
      channel = 0
      startVal [time (s)] = 0.0
      stereo = False
      stopVal [duration (s)] = 3600
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    CodeComponent code_9
      Code Type = Py
      End Routine:
        audio_test_mic.stop()
  Routine external_nback
    CodeComponent start_brainworkshop_2
      Code Type = Py
      Begin Routine:
        nback_duration = 300 #play for nback_duration seconds

        #my_keyboard = Controller()
        #p=subprocess.Popen(".\\Brain Workshop\\brainworkshop.exe")
        #time.sleep(1)
        #app = Application().connect(process=p.pid)
        #app.top_window().set_focus()

        os.system("C:\\\"Program Files\"\\\"Mozilla Firefox\"\\firefox.exe https://brainscale.net/dual-n-back/training")
        time.sleep(1)

        #hit space twice to start the first round
        #my_keyboard.press(' ')
        #my_keyboard.release(' ')
        #time.sleep(0.5)
        #my_keyboard.press(' ')
        #my_keyboard.release(' ')
        #time.sleep(1)

        time.sleep(nback_duration)
        #p.kill()
        os.system("taskkill /IM firefox.exe")
        continueRoutine = False
    KeyboardComponent key_resp_21
      allowedKeys = 'y','n','left','right', 'a', 'l'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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  Routine before_close_eyes
    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_12
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $before_close_eyes_text[language]
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  Routine close_eyes
    TextComponent text_13
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      text [set every repeat] = $close_eyes_text[language]
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    SoundComponent sound_4
      sound = 1000
      startVal [time (s)] = 60
      stopVal [duration (s)] = 0.5
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  Routine after_close_eyes
    TextComponent text_14
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $after_close_eyes_text[language]
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    KeyboardComponent key_resp_22
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine choose_language
    TextComponent text_15
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Please choose a language.

        Press "D" for german or "E" for englisch.

        Bitte wählen Sie Ihre Sprache.

        Drücken Sie "D" für deutsch oder "E" für Englisch.
    KeyboardComponent key_resp_23
      allowedKeys = 'e', 'd'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_11
      Code Type = Py
      End Routine:
        if key_resp_23.keys == 'd':
            language = 'de'
        else:
            language = 'en'
  Routine stroop_color_words
    TextComponent blue
      color = blue
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = blue        blau
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    TextComponent red
      color = red
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text = red        rot
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    TextComponent yellow
      color = yellow
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      text = yellow        gelb
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    TextComponent green
      color = green
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = green        grün
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    TextComponent purple
      color = purple
      letterHeight = 0.05
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
      text = purple           lila
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    TextComponent magenta
      color = magenta
      letterHeight = 0.05
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = magenta        magenta
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    TextComponent orange
      color = orange
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = orange        orange
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    KeyboardComponent key_resp_19
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent black
      color = black
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = black       schwarz
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    TextComponent white
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = white    weiß
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
  Routine neutral_speech_instruction
    KeyboardComponent key_resp_25
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_17
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $neutral_speech_instruction_text[language]
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  Routine neutral_speech_recording
    TextComponent text_18
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $neutral_speech_text[language][neutral_speech.thisN]
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    KeyboardComponent key_resp_26
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    MicrophoneComponent neutral_speech_mic
      channel = 0
      disabled = True
      startVal [time (s)] = 0.0
      stereo = False
      stopVal [duration (s)] = 3600
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  Routine shot_break_after_stroop_timepressure_practice
    KeyboardComponent key_resp_28
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_20
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $instruction_stroop_timepressure_text[language]
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  Routine short_break_after_stroop_dual_practice
    KeyboardComponent key_resp_29
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_21
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $instruction_stroop_dual_text[language]
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  Routine stroop_practice_trial
    KeyboardComponent goto_next_trial_2
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = all keys
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    TextComponent word_4
      color [set every repeat] = $stroop_font_colors[stroop_practice.thisN]
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $stroop_color_words[stroop_practice.thisN]
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    MicrophoneComponent subj_answer_3
      channel = 0
      disabled = True
      startVal [time (s)] = 0.0
      stereo = False
      stopVal [duration (s)] = 3600
      syncScreenRefresh = True
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  Routine stroop_timepressure_practice
    TextComponent word_5
      color [set every repeat] = $stroop_font_colors[stroop_timepressure_practice_trials.thisN]
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.8
      text [set every repeat] = $stroop_color_words[stroop_timepressure_practice_trials.thisN]
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    MicrophoneComponent subj_answer_4
      channel = 0
      disabled = True
      startVal [time (s)] = 0.0
      stereo = False
      stopVal [duration (s)] = 0.8
      syncScreenRefresh = True
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  Routine stroop_dual_task_practice_routine
    TextComponent word_6
      color [set every repeat] = $stroop_font_colors[stroop_dual_task_practice.thisN]
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $stroop_color_words[stroop_dual_task_practice.thisN]
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    SoundComponent sound_5
      saveStartStop = False
      sound [set every repeat] = $stroop_dual_beeps[stroop_dual_task_practice.thisN]
      startVal [time (s)] = 0.8
      stopVal [duration (s)] = 0.4
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    MicrophoneComponent subj_response_4
      channel = 0
      disabled = True
      startVal [time (s)] = 0.0
      stereo = False
      stopVal [duration (s)] = 1
      syncScreenRefresh = True
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    CodeComponent code_14
      Code Type = Py
      Begin Routine:
        if stroop_dual_beeps[stroop_dual_task_practice.thisN] == 2000:
                num_high_pitches += 1
  Routine before_stroop_dual
    CodeComponent code_10
      Code Type = Py
      Begin Routine:
        stroop_dual_beeps = list()
        num_high_pitches = 0
        for i in range(20):
            stroop_dual_beeps.append(np.random.choice([1000, 2000], p=[0.5, 0.5]))
  Routine ask_for_num_high_pitches
    TextComponent text_22
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $ask_for_num_high_pitches_text[language]
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    KeyboardComponent key_resp_30
      allowedKeys = 'return', 'right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_13
      Code Type = Py
      End Routine:
        try:
            subj_answer = int(num_high_pitches_textbox.text)
        except Exception as e:
            subj_answer = -1
        has_correct_answered = num_high_pitches == subj_answer
        print(subj_answer)
        print(num_high_pitches_textbox.text)
        print(num_high_pitches)
    TextboxComponent num_high_pitches_textbox
      bold = False
      editable = True
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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  Routine num_high_pitches_feedback
    TextComponent text_23
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $correct[language] if has_correct_answered else false[language] + reading_span_feedback_text[language] +str(num_high_pitches)
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  Routine instruction_reading_span_practice
    TextComponent text_24
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      text [set every repeat] = $instruction_readingspan_practice_text[language]
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    KeyboardComponent key_resp_31
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine before_reading_span_practice
    CodeComponent code_16
      Code Type = Py
      Begin Routine:
        c_numbers_to_remember_practice = np.array([2])

        selected_rows_reading_span = np.arange(0, 126)
        shuffle(selected_rows_reading_span)
        selected_rows_reading_span = selected_rows_reading_span[:c_numbers_to_remember_practice[0]]

        numbers_to_remember = list()
  Routine dominant_hand_info
    TextComponent text_25
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      text [set every repeat] = $dominant_hand_info[language]
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    KeyboardComponent key_resp_32
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine nasa_txl_questionaire_german
    TextComponent instructions_questionaire_3
      letterHeight = 0.05
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
      text [set every repeat] = $instruction_question
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    RatingScaleComponent questionaire_answer_2
      forceEndRoutine = True
      pos = 0, -0.4
      singleClick = True
      size = 1
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
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      customize_everything:
        stretch = 2,
        low = 0,
        high = 200,
        tickMarks = sorted({i*10 for i in range(21)}),
        labels = ['Gering', '', '', '', '', '', '', '', '', '', '', '', '', '', '', '', '', '', '', '', 'Hoch'],
        scale = None,
        singleClick = True,
        showAccept = False,
    SliderComponent question_slider_3
      disabled = True
      forceEndRoutine = True
      granularity = 1
      labels = "", "", "", "", "", "", "", "", "", "", "", "", "", "", "", "", "", "", "", ""
      letterHeight = 0.05
      pos = (0, -0.2)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = ['rating']
      ticks = (1, 1.5, 2, 2.5,  3, 3.5, 4, 4.5,  5, 5.5, 6, 6.5, 7, 7.5, 8, 8.5, 9, 9.5, 10)
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    TextComponent question_text_3
      letterHeight = 0.05
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $question
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    CodeComponent adapt_size_of_slider_labels_3
      Code Type = Py
      Begin Experiment:
        question_slider = visual.Slider(win=win, name='question_slider',
            size=(1.0, 0.1), pos=(0, -0.2), units=None,
            labels=["not at all", "slightly", "moderately", "very",  "extremely"], ticks=(1, 2, 3, 4, 5),
            granularity=1, style=('rating',),
            color='LightGray', font='HelveticaBold',
            flip=False, labelHeight=0.03)
      Begin Routine:
        if language == 'en':
            continueRoutine = False
    PolygonComponent polygon_2
      fillColor = $[1,1,1]
      lineWidth = 4
      ori = 90
      pos = [0,-0.180]
      saveStartStop = False
      shape = line
      size = (0.025, 0)
      startVal [time (s)] = 0.0
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  Routine questionaire_german
    TextComponent instructions_questionaire_4
      letterHeight = 0.04
      pos = (0, 0.30)
      startVal [time (s)] = 0.0
      text [set every repeat] = $PANAS_text[language]
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    RatingScaleComponent questionaire_answer_3
      disabled = True
      forceEndRoutine = True
      high = 4
      labels = Not at all, A little, Somewhat, Very Much So
      low = 0
      pos = 0, -0.4
      scaleDescription = $question
      singleClick = True
      size = 1.0
      startVal [time (s)] = 0.0
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    SliderComponent question_slider_4
      forceEndRoutine = True
      granularity = 1
      labels = "gar nicht", "ein bisschen", "einigermaßen", "erheblich", "äußerst"
      letterHeight = 0.03
      pos = (0, -0.2)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = ['rating']
      ticks = (1, 2, 3, 4, 5)
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    TextComponent question_text_4
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $question
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    CodeComponent skip_if_eng
      Code Type = Py
      Begin Routine:
        if language == 'en' :
            continueRoutine = False
  Routine stroop_beep1
    SoundComponent sound_6
      sound = 2000
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.4
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    TextComponent text_26
      letterHeight = 0.1
      startVal [time (s)] = 0.4
      text [set every repeat] = $stroop_beep1_text[language]
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    KeyboardComponent key_resp_33
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine stroop_beep2
    SoundComponent sound_7
      sound = 1000
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.4
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  Routine affective_slider
    TextComponent text_29
      letterHeight = 0.04
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $affective_slider_instruction_text[language]
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    SliderComponent arousel_slider_3
      forceEndRoutine = False
      granularity = 0
      labels = ["", ""]
      letterHeight = 0.05
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = slider
      ticks = (1, 10)
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    SliderComponent pleasure_slider_3
      forceEndRoutine = False
      granularity = 0
      labels = ["", ""]
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = slider
      ticks = (1, 10)
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    KeyboardComponent key_resp_36
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent arousal_low
      image = res\img\arousal_low.png
      pos = (-0.6, 0)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent arousal_high
      image = res\img\arousal_high.png
      pos = (0.6, 0)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent pleasure_low
      image = res\img\pleasure_low.png
      pos = (-0.6, -0.3)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent pleasure_high
      image = res\img\pleasure_high.png
      pos = (0.6, -0.3)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    TextComponent text_30
      disabled = True
      letterHeight = 0.04
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $slider_arousal_text[language]
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    TextComponent text_31
      disabled = True
      letterHeight = 0.04
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $slider_pleasure_text[language]
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  Routine neutral_speech_start_mic
    CodeComponent code_12
      Code Type = Py
      Begin Routine:
        neutral_speech_mic = microphone.AdvAudioCapture(name='neutral_speech_mic', saveDir=wavDirName, stereo=False, chnl=0)
        neutral_speech_mic.record(sec=3600)
  Routine neutral_speech_stop_mic
    CodeComponent code_18
      Code Type = Py
      Begin Routine:
        import time

        time.sleep(1)
        neutral_speech_mic.stop()
  Routine reading_span_short_break
    CodeComponent code_7
      Code Type = Py
      Begin Routine:
        if reading_span_whole_set.thisN == reading_span_whole_set.nReps-1:
            continueRoutine = False
    TextComponent text_27
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $short_break_stroop_text[language]
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    KeyboardComponent key_resp_34
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine wait_for_experimenter
    TextComponent text_28
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $wait_for_experimenter_text[language]
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    KeyboardComponent key_resp_35
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine time_synchronisation_training
    TextComponent text_32
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      text [set every repeat] = $time_sync_train_text[language]
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    KeyboardComponent key_resp_37
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine external_nback_practice
    CodeComponent start_brainworkshop
      Code Type = Py
      Begin Routine:
        nback_duration = 60 #play for nback_duration seconds

        #my_keyboard = Controller()
        #p=subprocess.Popen(".\\Brain Workshop\\brainworkshop.exe")
        #time.sleep(1)
        #app = Application().connect(process=p.pid)
        #app.top_window().set_focus()

        os.system("C:\\\"Program Files\"\\\"Mozilla Firefox\"\\firefox.exe https://brainscale.net/dual-n-back/training")
        time.sleep(1)
        #hit space twice to start the first round
        #my_keyboard.press(' ')
        #my_keyboard.release(' ')
        #time.sleep(0.5)
        #my_keyboard.press(' ')
        #my_keyboard.release(' ')
        #time.sleep(1)

        time.sleep(nback_duration)
        #p.kill()
        os.system("taskkill /IM firefox.exe")
        continueRoutine = False
  Routine nback_practice_text
    KeyboardComponent key_resp_39
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_33
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      text [set every repeat] = $nback_practice_text[language]
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  Routine nback_start_text
    KeyboardComponent key_resp_40
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_34
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      text [set every repeat] = $nback_start_text[language]
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
  Routine nasa_txl_comparison
    ButtonComponent button_3
      bold = False
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (-0.5, 0.1)
      size = (0.3, 0.1)
      startVal [time (s)] = 0
      text [set every repeat] = $word1
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    ButtonComponent button_4
      bold = False
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (-0.5, -0.2)
      saveStartStop = False
      size = (0.3, 0.1)
      startVal [time (s)] = 0
      text [set every repeat] = $word2
      timeRelativeTo = experiment
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    TextComponent nasa_comparison_textf
      letterHeight = 0.05
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
      text [set every repeat] = $nasa_comparison_text[language]
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    TextComponent description1_textfield
      letterHeight = 0.03
      pos = (0.2, 0.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $description1
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    TextComponent description2_textfield
      letterHeight = 0.03
      pos = (0.2, -0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $description2
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  Routine emotional_sentences_introduction
    TextComponent emotional_sentence_textfield
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $emotional_sentence_intro[language]
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    KeyboardComponent key_resp_38
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine speaking_vowels_introduction
    TextComponent text_40
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $speaking_vowels_intro[language]
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    KeyboardComponent key_resp_43
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine phones_as_long_as_possible_preview
    TextboxComponent textbox
      bold = False
      editable = False
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $speaking_vowels_preview1[language] + "\n\n" + vowel_sentence + "\n\n" + speaking_vowels_preview2[language]
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    KeyboardComponent key_resp_44
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine phones_as_long_possible_recording
    TextboxComponent textbox_2
      bold = False
      editable = False
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $speaking_vowels[language] + "\n\n" + vowel_sentence + "\n\n" + stop_vowels_recording[language]
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    KeyboardComponent key_resp_45
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    MicrophoneComponent vowels_long_mic
      channel = 0
      startVal [time (s)] = 0.0
      stereo = False
      stopVal [duration (s)] = 3600
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  Routine phones_5_secs_preview
    TextboxComponent textbox_3
      bold = False
      editable = False
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $speaking_vowels_preview1[language] + "\n\n" + vowel_sentence_5_secs + "\n\n" + speaking_vowels_5_secs_preview[language]
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    KeyboardComponent key_resp_46
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine phones_5_secs_recording
    TextboxComponent textbox_4
      bold = False
      editable = False
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $speaking_vowels[language] + "\n\n" + vowel_sentence_5_secs + "\n\n" + speaking_vowels_5_secs[language]
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    MicrophoneComponent phone_5_secs_mic
      channel = 0
      startVal [time (s)] = 0.0
      stereo = False
      stopVal [duration (s)] = 5
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    TextComponent timer_vowels
      letterHeight = 0.1
      pos = (0, -0.4)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 5
      text [set every frame] = $str(max(round(routineTimer.getTime()-timer_vowels.tStart, 1), 0))
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  Routine instruction_texts_configuration_and_imports
    CodeComponent texts_configuration
      Code Type = Py
      Before Experiment:
        vorlage = {'de' : "", 'en' : ""}

        import sys
        sys.coinit_flags = 2
        import subprocess
        import time
        from pywinauto import Application
        from pynput.keyboard import Key, Controller

        welcome_messages = {'de': "Herzlich willkommen zu unserer EATMAPS-Studie.\n\nBitte drücken Sie die Leertaste, um fortzufahren.", 'en': "Welcome to our EATMAPS-study.\n\nPlease press the space bar to continue."}

        sample_beeps_text = {'de' : "Drücken Sie bitte die Leertaste, um den nächsten Piepton zu hören.", 'en' : "Please press the space bar to hear the next beep sound."}
        sample_beeps_instruction_text = {'de' : "Sie werden gleich vier Pieptöne hören. Bitten stellen Sie gemeinsam mit dem Experimentator die Kopfhörer auf eine angenehme Lautstärke. \nDrücken Sie die Leertaste, um den ersten Piepton zu hören.", 'en' : "You will hear 4 beep sounds. Please change the volume of your headphones to a niveau that is comfortable to you. The experimenter will help you. \nPress the space bar to hear the first beep sound."}

        time_sync_text = {'de': "Um die Sensoren zu synchronisieren, schlagen Sie bitte 3 mal kraftvoll aus Schulterhöhe mit dem Zeigefinger Ihrer nicht-dominanten Hand auf die Leertaste.", 'en' : "To synchronise the sensors, please hit the space bar 3 times forcefully from shoulder height with the index finger of your non-dominant hand."}
        time_sync_train_text = {'de': "Um die Sensoren zu synchronisieren, schlagen Sie bitte 3 mal kraftvoll aus Schulterhöhe mit dem Zeigefinger Ihrer nichtdominanten Hand auf die Leertaste. \nDies ist ein Übungsversuch.", 'en' : "To synchronise the sensors, please hit the space bar 3 times forcefully from shoulder height with the index finger of your non-dominant hand. This is a training trial."}

        dominant_hand_info = {'de' : "Bitte versuchen Sie, Ihre nicht-dominate Hand auf dem Tisch liegen zu lassen und sie nicht zur Bedienung der Maus oder der Tastatur zu verwenden. \nDrücken Sie die Leertaste um fortzufahren.", 'en' : "Please try to keep your non dominant hand rested on the desk and don't use it to operate the mouse or keyboard. Press the space bar to continue."}

        audio_sync_text = {'de' : "Um die Mikrophone zu synchronisieren, klatschen Sie bitte 3 mal laut in die Hände.", 'en' : "To synchronise the microphones, please clap your hands loudly 3 times."}
        audio_test_text = {'de' : "Um zu überprüfen, ob Ihre Sprache richtig aufgenommen wird, lesen Sie bitte den folgenden Satz vor. Drücken Sie anschließend bitte die Leertaste.\n\nFranz jagt im komplett verwahrlosten Taxi quer durch Bayern.", 'en' : "To check if your voice is being recorded properly, please read out aloud the following sentence. Please press the space bar afterwards.\n\nThe quick brown fox jumps over the lazy dog."}

        video_instruction_text = {'de' : "Auf der nächsten Seite wird Ihnen ein 10-minütiges Video vorgespielt. Schauen Sie sich es an und entspannen Sie sich dabei. \nDrücken Sie die Leertaste um fortzufahren.", 'en' : "On the next page you will see a 10 minute video. Please watch it and relax yourself. \nPress the space bar to start."}

        instruction_play_game_text = {'de' : "Auf der nächsten Seite wird ein Spiel erscheinen, das Sie für 25 Minuten spielen können um sich dabei zu entspannen.", 'en' : "On the next screen a game will pop up. Please presss \"Play Now\" and play the game for 25 minutes and relax yourself."}
        play_game_text = {'de' : "Bitte spielen Sie das Spiel und entspannen sich dabei.", 'en' : "Please play the game and relax yourself."}
        neutral_speech_instruction_text = {'de' : "Als nächstes würden wir Sie bitten, einen Paragraphen auf der folgenden Seite in einem neutralen Tonfall vorzulesen. \n\nDrücken Sie die Leertaste um mit der Aufnahme zu beginnen. Der Paragraph ist über 3 Seiten aufgeteilt. Nachdem Sie eine Seite gelesen haben, drücken Sie bitte die Leertaste, um die nächste Seite anzuzeigen. Drücken Sie erneut die Leertaste, wenn sie fertig sind." ,'en' : "Next we would like you to read a paragraph on the following page in a neutral tone. \n\nPress the space bar to start the recording. The text passage will be segmented across 3 pages. After reading one page, please press the space bar to continue. Press the space bar again when you finished"}
        neutral_speech_text = {'de' : ["Einst stritten sich Nordwind und Sonne, wer von ihnen beiden wohl der Stärkere wäre, als ein Wanderer, der in einen warmen Mantel gehüllt war, des Weges daherkam. \nSie wurden einig, dass derjenige für den Stärkeren gelten sollte, der den Wanderer zwingen würde, seinen Mantel abzunehmen.", "Der Nordwind blies mit aller Macht, aber je mehr er blies, desto fester hüllte sich der Wanderer in seinen Mantel ein. \nEndlich gab der Nordwind den Kampf auf.", "Nun erwärmte die Sonne die Luft mit ihren freundlichen Strahlen, und schon nach wenigen Augenblicken zog der Wanderer seinen Mantel aus. \nDa musste der Nordwind zugeben, dass die Sonne von ihnen beiden der Stärkere war."], 'en' : ["The North Wind and the Sun were disputing which was the stronger, when a traveller came along wrapped in a warm cloak. \nThey agreed that the one who first succeeded in making the traveller take his cloak off should be considered stronger than the other.", "Then the North Wind blew as hard as he could, but the more he blew the more closely did the traveller fold his cloak around him; and at last the North Wind gave up the attempt.", "Then the Sun shone out warmly, and immediately the traveller took off his cloak. And so the North Wind was obliged to confess that the Sun was the stronger of the two."]}

        emotional_sentence_intro = {'de' : "Als nächstes sollen Sie versuchen, Sätze in geschauspielerten Emotionen zu sprechen. Sie werden den Satz und die Emotion, in welcher dieser geschauspielert werden soll, auf dem Bildschirm sehen. Auf dem Bildschirm können Sie den Satz in Ruhe für sich lesen und wenn Sie bereit sind, können Sie die Aufnahme durch Drücken der Leertaste starten. \nUm die Aufnahme abzuschließen, drücken Sie einfach erneut die Leertaste.", 'en' : "Next, you should try to speak sentences in acted emotions. You will see the sentence and the emotion in which you should act it and record it on one screen. There, you can read it by yourself and when you are ready, start the recording by pressing the space bar. \nTo finish the recording, just press the space bar again."}
        emotional_sentence_preview_text = {'de' : "Auf dem nächsten Bildschirm lesen Sie bitte den folgenden Satz vor:", 'en' : "On the next screen, please read the following sentence:"}
        act_emotion_text = {'de' : "geschauspielert in der Emotion: ", 'en' : "acted with the emotion: "}
        start_recording_text = {'de' : "Drücken Sie bitte die Leertaste, um die Aufnahme zu starten.", 'en' : "Please press the space bar to start the recording."}
        stop_recording_text = {'de' : "Drücken Sie bitte die Leertaste, um die Aufnahme abzuschließen.", 'en' : "Please press the space bar to finish the recording."}
        emotional_sentence_read_text = {'de' : "\nLesen Sie bitte den folgenden Satz vor:", 'en' : "\nPlease read the following sentence:"}

        speaking_vowels_intro = {'de' : "Als nächstes sollen Sie 5 langgezogene Laute artikulieren (z.B. \"Sagen Sie 'a' wie in Tal\"). \nSie werden ein Beispielwort, in welchem der zu sprechende Laut hervorgehoben ist, auf dem Bildschirm sehen. Auf dem Bildschirm können Sie den Laut in Ruhe für sich lesen und wenn Sie bereit sind, können Sie die Aufnahme durch Drücken der Leertaste starten. Um die Aufnahme abzuschließen, drücken Sie einfach erneut die Leertaste. \nArtikulieren Sie den Laut in einer für Sie angenehmen Lautstärke und Tonlage. \nSprechen sie nicht das Beispielwort, artikulieren sie nur den Laut (z.B. 'a').", 'en' : "Next, you should try to speak 5 sustained phonemes. You will see an example-word in which a phoneme is highlighted on one screen (e.g. \"Say 'a' as in father\"). There, you can read the phoneme by yourself and when you are ready, start the recording by pressing the space bar. To finish the recording, just press the space bar again. Utter the phoneme with a loudness and pitch that are comfortable for you. Just say the phoneme sound itself (e.g. 'a'). Don't read the whole example word."}
        speaking_vowels_preview1 = {'de' : "Auf dem nächsten Bildschirm artikulieren Sie bitte den folgenden Laut:", 'en' : "On the next screen, please say the following phone:"}
        speaking_vowels_preview2 = {'de' : "in einer für Sie angenehmen Lautstärke und Tonlage. Halten Sie den Ton konstant so lange wie möglich in einem Atemzug.\n\nDrücken Sie bitte die Leertaste, um die Aufnahme zu starten.", 'en' : "with a loudness and pitch that is comfortable for you. Hold the sound consistently as long as you can in one breath.\n\nPlease press the space bar to start the recording."}
        speaking_vowels = {'de' : "Artikulieren Sie bitte den folgenden Laut:", 'en' : "Please say the following phoneme:"}
        stop_vowels_recording = {'de' : "in einer für Sie angenehmen Lautstärke und Tonlage.\nHalten Sie den Ton konstant so lange wie möglich <b>in einem Atemzug</b>.\nDrücken Sie bitte die Leertaste, um die Aufnahme zu abzuschließen.", 'en' : "with a loudness and pitch that is comfortable for you.\nHold the sound consistently as long as you can <b>in one breath</b>.\n\nPlease press the space bar to finish the recording."}
        speaking_vowels_5_secs_preview = {'de' : "in einer für Sie angenehmen Lautstärke und Tonlage.\nHalten Sie den Ton konstant für <b>5 Sekunden</b> bis der Countdown abgelaufen ist.\nDrücken Sie bitte die Leertaste, um die Aufnahme zu starten, welche automatisch nach Ablauf des 5-Sekunden Countdown abgeschlossen wird.", 'en' : "with a loudness and pitch that is comfortable for you.\nHold the sound consistently for <b>5 seconds</b> until the countdown ends.\n\nPlease press the space bar to start the recording, which will be stopped automatically after the 5 second timer."}
        speaking_vowels_5_secs = {'de' : "in einer für Sie angenehmen Lautstärke und Tonlage.\nHalten Sie den Ton konstant für <b>5 Sekunden</b> bis der Countdown abgelaufen ist.", 'en' : "with a loudness and pitch that is comfortable for you.\nHold the sound consistently for <b>5 seconds</b> until the countdown ends."}

        wait_for_experimenter_text = {'de' : "Warten Sie bitte auf den Experimentator.", 'en' : "Please wait for the experimenter."}
        instruction_60_sec_mood_text = {'de' : "Auf dem nächsten Bildschirm werden Sie einen Timer sehen.\nBeschreiben Sie bitte ihre aktuelle Stimmung, sobald der Timer erscheint. Bitte vermeiden Sie es, persönliche und private Details zu erzählen, sondern versuchen Sie eher Ihre aktuellen Gefühle durch ihre Stimme auszudrücken.\nSie haben bis zu 60 Sekunden Zeit. Versuchen Sie bitte für mindestens 30 Sekunden zu sprechen. Sobald Sie fertig sind, drücken Sie bitte die Leertaste um fortzufahren.\n\nSagen Sie bitte dem Experimentator Bescheid, dass er kurz den Raum verlassen soll, während Sie diese Aufnahme machen.\n\nBitte drücken Sie die Leertaste sobald Sie bereit sind.", 'en' : "On the next screen you will see a timer.\nWhen the timer appears, please describe your current mood. Please avoid telling any personal and private details, but rather try to express your current feelings through your voice.\nYou have up to 60 seconds and please try to speak at least for 30 seconds. If you are done, please press the space bar to commence.\n\nPlease tell the experimenter to briefly leave the room while you perform this recording.\n\nPlease press the space bar when you are ready."}
        mood_text = {'de' : "Beschreiben Sie bitte Ihre aktuelle Stimmung, sobald der Timer erscheint. Bitte vermeiden Sie es, persönliche und private Details zu erzählen, sondern versuchen Sie eher Ihre aktuellen Gefühle durch ihre Stimme auszudrücken.\nSie haben bis zu 60 Sekunden Zeit. Versuchen Sie bitte für mindestens 30 Sekunden zu sprechen. Sobald Sie fertig sind, drücken Sie bitte die Leertaste um fortzufahren.\n\n\n\n", 'en' : "\nWhen the timer appears, please describe your current mood. Please avoid telling any personal and private details, but rather try to express your current feelings through your voice.\nYou have up to 60 seconds and please try to speak at least for 30 seconds. If you are done, please press the space bar to commence.\n\n\n\n"}
        seconds = {'de' : "Sekunden", 'en' : "seconds"}

        before_close_eyes_text = {'de' : "Bitte drücken Sie die Leertaste und schließen Sie Ihre Augen für eine Minute, bis Sie einen Piepton hören.", 'en' : "Please press the space bar and close your eyes for one minute until you hear a beep sound."}
        close_eyes_text = {'de' : "Bitte halten Sie Ihre Augen geschlossen.", 'en' : "Please keep your eyes closed."}
        after_close_eyes_text = {'de' : "Bitte öffnen Sie Ihre Augen und drücken Sie die Leertaste, um fortzufahren.", 'en' : "Please open your eyes and hit the space bar to continue with the next task."}

        PANAS_text = {'de' : "Nun möchten wir gerne von Ihnen wissen, wie Sie sich fühlen. Die folgenden Wörter beschreiben unterschiedliche Gefühle und Empfindungen. Lesen Sie jedes Wort und tragen Sie dann in die Skala unter jedem Wort die Intensität ein. Sie haben die Möglichkeit, zwischen fünf Abstufungen zu wählen. Geben Sie bitte an, wie Sie sich im Moment fühlen.", 'en' : "Now we would like to know how you feel. The following words describe different kinds of feelings and perception. Read every word and mark the intensity on the scale. You have the choice between five gradations. Please indicate how you are feeling right now."}

        nasa_comparison_text = {'de' : "Klicken Sie auf die Dimension, die den jeweils wichtigeren Beitrag zur Arbeitsbelastung hinsichtlich der Aufgabe darstellt.", 'en' : "Click on the factor that represents the more important contributor to workload for the task."}

        affective_slider_instruction_text = {'de' : "Bitte beschreiben Sie Ihre aktuellen Emotionen mit den beiden Slidern. Denken Sie nicht zu viel darüber nach, sondern geben Sie einfach an, wie Sie sich im Moment fühlen. Drücken Sie die Leertaste um fortzufahren.", 'en' : "Please rate your current emotions using both sliders. Don't think too much about it, just rate how you feel at this moment. Press the space bar to continue."}
        slider_arousal_text = {'de' : "Bitte markieren Sie, wie aktiv Sie sich fühlen.", 'en' : "Click the slider to rate your level of Arousal."}
        slider_pleasure_text = {'de' : "Bitte markieren Sie, wie viel Freude Sie fühlen.", 'en' : "Click the slider to rate your level of Pleasure."}

        nback_instruction_text = {'de' : "Bitte lesen Sie die folgenden Anweisungen sorgfältig durch, bevor Sie fortfahren.\n\nAls nächstes werden Sie den sogenannten n-back-Test durchführen. Alle 3 Sekunden wird Ihnen ein Buchstabe vorgesprochen. Gleichzeitig sehen Sie auf Ihrem Bildschirm ein Quadrat in einem 3x3-Raster erscheinen. Ihre Aufgabe ist es, sich sowohl den Buchstaben als auch die Position des Quadrats so gut wie möglich einzuprägen.\n\nWenn ein Buchstabe gesprochen wird und das Quadrat seine Position ändert, drücken Sie die entsprechenden Tasten, um zu reagieren:\n\nDrücken Sie die linke Pfeiltaste auf Ihrer Tastatur, wenn die aktuelle Position des Quadrats mit der Position n (z.B. 2) Positionswechsel vorher übereinstimmt.\n\n\nDrücken Sie die rechte Pfeiltaste auf Ihrer Tastatur, wenn der aktuelle Buchstabe mit dem Buchstaben vor n Positionswechsel übereinstimmt.\n\nManchmal müssen Sie beide Tasten drücken.\nDie Zahl n ändert sich nach jeder Runde abhängig von Ihrer Leistung. Sie ist in der oberen Mitte des Bildschirms zu sehen. Sie beginnen mit einem n von 1. Sie müssen sich also die Position des Quadrats und den Buchstaben des letzten Versuchs merken.\n\nWenn Sie Fragen haben, fragen Sie bitte einen Experimentator. Wenn Sie bereit sind zu beginnen, drücken Sie bitte die Leertaste.", 'en' : "Please read the following instructions carefully, before you continue.\n\nYou will be performing the so called n-back test next. Every 3 seconds, you will hear a letter spoken out. Simultaneously, you will see a square appearing on your screen within a 3x3-grid. Your task is to memorize both the letter and the position of the square as good as you can.\n\nWhen a letter is spoken and the square changes position, press the respective keys to react:\n\nPress the left arrow key on your keyboard, if the current position of the square matches the position n (e.g. 2) changes in position ago.\n\nPress the right arrow key on your keyboard if the current letter matches the letter n changes in position ago.\n\nSometimes you have to press both buttons.\nThe number of n might change after each round depending on your performance. You can be seen at the upper middle of the screen. You will start with an n of 1, so you have to remember the square's position and the letter of the last trial.\n\nIf you have any questions, please ask an experimenter. If you are ready to go, please press the space bar."}
        nback_start_text = {'de' : "Nach der Übungsrunde kommt der tatsächliche n-back-Test. Drücken Sie die Leertaste um zu beginnen.\nSie werden den Test für 5 Minuten bearbeiten.", 'en' : "After the practice round, now follows the actual n-back-test for 5 minutes. Please press the space bar to begin."}
        nback_practice_text = {'de' : "Sie haben nun die Möglichkeit, den n-back Test für eine Minute auszuprobieren. \n\nDrücken Sie die Leertaste um zu beginnen.", 'en' : "You now have the opportunity to try out the n-back test for one minute. \n\nPress the space bar to begin."}

        stroop_instruction_text = {'de' : "Die nächste Aufgabe ist der so genannte Stroop-Test. \n\nAuf dem Bildschirm wird ein Farbname angezeigt. Bitte lesen Sie dieses geschriebene Wort laut vor und ignorieren Sie die Farbe, in der es abgebildet ist. Seien Sie dabei so schnell wie möglich. Drücken Sie die Leertaste, nachdem Sie ein Wort vorgelesen haben. \n\nEs ist wichtig, dass Sie nur das Wort lesen und nicht die Farbe, in der es gedruckt ist, während Sie versuchen so schnell wie möglich zu sein.\n\nAuf der nächsten Seite sehen Sie eine Übersicht aller Farbwörter, die vorkommen werden werden.\n\nDrücken Sie die Leertaste, um fortzufahren.", 'en' : "The next task is the so called Stroop test. \n\nA color name will appear on the screen. Please read aloud that written word and ignore the color, in which it is printed, while being as quickly as possible. Press the space bar after your read a word. \n\nIt is important that you only read the word and not say the color, in which it is printed, while being as fast as possible. \n\nOn the next page, you can see an overview all color words, which will be presented. \n\nPress the space bar to proceed."}
        stroop_beep1_text = {'de' : "Drücken Sie die Leertaste, um ein Beispiel für einen tiefen Ton zu höhren.", 'en' : "Press the space bar to hear an example for a low-pitched tone."}
        stroop_practice_break_text = {'de' : "Nach der Übungsrunde kommt nun der eigentliche Stroop-Test. Hierbei sollen Sie jeweils 20 Wörter hintereinander wie gehabt vorlesen. Es gibt insgesamt 3 solcher Runden. \n\nDrücken Sie die Leertaste um zu beginnen.", 'en' : "After the practice round, now follows the actual Stroop test. Here you are to read out 20 words after another as before. There are in total 3 of these rounds. \n\nPress the space bar to beginn."}
        stroop_before_practice_text = {'de' : "Sie haben nun die Möglichkeit den Stroop-Test in einer Übungsrunde auszuprobieren. \n\nDrücken Sie die Leertaste um zu beginnen.", 'en' : "You now have the opportunity to try out the Stroop test in a practice round. \n\nPress the space bar to beginn."}
        short_break_stroop_text = {'de' : "Atmen Sie tief durch. Drücken Sie die Leertaste, um mit der nächsten Runde fortzufahren.", 'en' : "Take a deep breath. Press the space bar to continue with the next round."}
        stroop_before_practice_timepressure_text = {'de' : "Als nächstes folgt der Stroop-Test mit Zeitdruck. \n\nLesen Sie bitte wie zuvor das geschriebene Wort laut vor und ignorieren Sie die Farbe, in der es abgebildet ist. Das nächste Wort wird nach sehr kurzer Zeit automatisch erscheinen, versuchen Sie also so schnell wie möglich das aktuelle Wort zu lesen. \n\nDrücken Sie die Leertaste um eine Proberunde zu beginnen.", 'en' : "The next task is the Stroop test with time pressure. \n\nAs before, please read the written word aloud, ignoring the color in which it is shown. The next word will appear automatically after a very short time, so try to read the current word as quickly as possible. \n\nPress the space bar to start a practice round."}
        instruction_stroop_timepressure_text = {'de' : "Nach der Übungsrunde kommt nun der eigentliche Stroop-Test mit Zeitdruck. Hierbei sollen Sie jeweils 20 Wörter hintereinander wie gehabt vorlesen. Es gibt insgesamt 3 solcher Runden. \n\nDrücken Sie die Leertaste um zu beginnen.", 'en' : "After the practice round, now follow the actual Stroop test with time pressure. Here you are to read out 20 words after another as before. There are in total 3 of these rounds. \n\nPress the space bar to beginn."}
        instruction_stroop_dual_text = {'de' : "Nach der Übungsrunde kommt nun der eigentliche Stroop-Test mit einer Multitasking-Aufgabe. Hierbei sollen Sie jeweils 20 Wörter hintereinander wie gehabt vorlesen. Es gibt insgesamt 3 solcher Runden. \n\nDrücken Sie die Leertaste um zu beginnen.", 'en' : "After the practice round, now follow the actual Stroop test with a multitasking aspect. Here you are to read out 20 words after another as before. There are in total 3 of these rounds. \n\nPress the space bar to beginn."}
        stroop_before_practice_dual_text = {'de' : "Als nächstes folgt der Stroop-Test mit einer Multitasking-Aufgabe. \n\nLesen Sie bitte wie zuvor das geschriebene Wort laut vor und ignorieren Sie die Farbe, in der es abgebildet ist. Wie zuvor wird das nächste Wort nach sehr kurzer Zeit automatisch erscheinen. \n\nZusätzlich werden Sie zwei verschiedene Arten von Tönen hören: einen hohen Ton oder einen tiefen Ton. \nZusätzlich zum lauten Aussprechen des geschriebenen Wortes sollen Sie nun auch leise für sich die Anzahl der hohen Töne zählen und diese am Ende jeder Runde angeben. \nEs ist nicht erlaubt, die Töne mit den Fingern zu zählen! \n\nDrücken Sie die Leertaste um ein Beispiel für einen hohen Ton zu hören.", 'en' : "The next task is the Stroop test with a multitasking aspect. \n\nPlease read the written word aloud and ignore the color in which it is displayed. As before, the next word will appear automatically after a very short time. \n\nIn addition, you will hear two different types of tones: a high tone or a low tone. \nAdditional to saying the written word out loud, you should now also silently count by yourself the number of high-pitched tones and enter that number at the end of each round. \nYou are not allowed to use your fingers to count the tones! \n\nPress the space bar to hear an example for a high-pitched tone."}
        ask_for_num_high_pitches_text = {'de' : "Bitte geben Sie die Anzahl der hohen Töne ein, die Sie bei der letzten Runde gehört haben und bestätigen Sie Ihre Eingabe mit der Eingabetaste.", 'en' : "Please enter the number of high pitched tones that you heard during the last round and confirm by pressing the enter key."}
        color_words = {'de' : ["weiß", "blau", "braun", "schwarz", "grün", "orange", "pink", "lila", "rot", "gelb", "weiß", "blau", "braun", "schwarz", "grün", "orange", "pink", "lila", "rot", "gelb"], 'en' : [ "white", "blue", "brown", "black", "green", "orange", "pink", "purple", "red", "yellow",  "white", "blue", "brown", "black", "green", "orange", "pink", "purple", "red", "yellow"]}
        color_translation = {'white':'weiß', 'blue' : 'blau', 'brown' : 'braun', 'blue' : 'blau', 'black' : 'schwarz', 'green' : 'grün', 'orange' : 'orange', 'pink' : 'pink', 'purple' : 'lila', 'red' : 'rot', 'yellow' : 'gelb'}
        instruction_readingspan_practice_text = {'de' : "Wir beginnen nun mit einem Reading-Span Test. \n\nHierbei sollen Sie \"Blöcke\" abarbeiten, die jeweils aus einer unterschiedlichen Anzahl an Sätzen bestehen. Vor jedem Satz sehen Sie für bis zu 5 Sekunden lang eine Zahl, die Sie sich merken sollen. Nach jedem Block von Sätzen werden Sie aufgefordert werden, die Zahlen, die Sie sich merken sollten, in der Reihenfolge, in der Sie sie gesehen haben, einzugeben. \n\nNachdem Sie die Zahl gesehen haben, sollen Sie den darauffolgenden Satz laut vorlesen. Für jeden Satz sollen Sie entscheiden, ob dieser Sinn macht oder nicht. \nDrücken Sie die rechte Pfeiltaste auf der Tastatur, wenn der Satz für Sie Sinn ergibt, oder drücken Sie die linke Pfeiltaste auf der Tastatur, wenn der Satz für Sie keinen Sinn ergibt.\n\nDrücken Sie die Leertaste, um eine Übungsrunde zu beginnen.", 'en' : "We now begin with a reading span test. \n\nYou will be presented with \"blocks\", each of which consist of a different number of sentences. Before each sentence, for up to 5 seconds, you will see a number, which you should remember. After every block of sentences, we will ask you to type the numbers, which you were asked to memorize, in the order in which you saw them. \n\nAfter seeing the number, you should read aloud the consecutive sentence. For each sentence, you should decide if it makes sense or not. \nPress the right arrow key on the keyboard if the sentence makes sense to you, or press the left arrow key on the keyboard if the sentence does not make sense to you. \n\nPress the space bar to begin a practice round."}
        instruction_readingspan_text = {'de' : "Nach der Übungsrunde kommt nun der eigentliche Reading-Span Test. Jede Runde besteht aus Blöcken von jeweils 2 - 5 Sätzen. In jedem Block sollen Sie sich die Zahl, die vor jedem Satz angezeigt wird, merken und anschließend den Satz laut vorlesen und entscheiden, ob dieser Sinn macht oder nicht. \nEs gibt insgesamt 3 solcher Runden. \n\nDrücken Sie die Leertaste um zu beginnen.", 'en' : "After the practice round, now follow the actual reading span test. Each round consists of blocks of 2 - 5 sentences each. In each block, you are supposed to remember the number that is displayed before each sentence and then read out aloud the sentence and decide whether it makes sense or not. \nThere are 3 such rounds in total. \n\nPress the space bar to beginn."}

        readingspan_number_text = {'de' : "Merken Sie sich die Zahl! \nDrücken Sie die Leertaste um fortzufahren.", 'en' : "Remember the number!\nPress the space bar or the right arrow to continue!"}
        readingspan_sentence_text = {'de' : "Bitte lesen Sie den Satz unten laut vor und entscheiden Sie, ob er wahr oder falsch ist.", 'en' : "Please read the sentence below aloud and decide, if it is true or false."}
        readingspan_arrows_text = {'de' : "rechte Pfeiltaste: wahr \t\n linke Pfeiltaste: falsch", 'en' : "right arrow: sentence makes sense \n\t\t left arrow: sentence does not make sense"}
        correct = {'de' : "Richtig!", 'en' : "Correct!"}
        false = {'de' : "Falsch!", 'en' : "False!"}

        readingspan_say_numbers_text = {'de' : "Schreiben Sie die letzten Zahlen in der richtigen Reihenfolge auf. Drücken Sie zwischen den Zahlen Enter.", 'en' : "Please write the last remembered numbers down in the right order! Press the return key after each number!"}
        reading_span_feedback_text = {'de' : "\n Die richtige Zahl war ", 'en' : "\n The correct number was "}

        eating_message_text = {'de' : "Vielen Dank für Ihre Teilnahme \n\nBitte erholen Sie sich für 20 Minuten und nehmen ein paar Snacks zu sich. Der Experimentator zeigt Ihnen alles. \n\nWenn Sie zurück sind, drücken Sie bitte die Leertaste, um den letzten Fragebogen zu beantworten.", 'en' : "Thank you for participating. \n\nPlease relax yourself for 20 minutes and eat some snacks. The experimenter will show you everything\n\nOnce you are back, please press the space bar to proceed to the last questionnaire."}

        dont_move_instruction_text = {'de' : "Bitte drücken Sie die Leertaste und schließen Ihre Augen für 3 Minuten bis Sie einen Piepton hören. Legen Sie Ihre Hände entspannt auf den Tisch. Bitte versuchen Sie, sich in der Zeit nicht zu bewegen.", 'en' : "Please press the space bar and close your eyes for 3 minutes until you hear a beep sound. Put your hands on the table in a relaxed manner. Please do not move your bady too much."}
        dont_move_text = {'de' : "Bitte halten Sie Ihre Augen geschlossen und bewegen sich nicht.", 'en' : "Please keep your eyes closed and do not move your body."}

        finish_text = {'de' : "Vielen Dank für Ihre Teilnahme! \nSie haben die Studie beendet.", 'en' : "Thank you for participating! \nYou've finished the study!"}


        emotions_path = {'de' : "res/de/conditions/emotions.xlsx", 'en' : "res/en/conditions/emotions.xlsx"}
        vowels_path = {'de' : "res/de/conditions/vowel_sentences.xlsx", 'en' : "res/en/conditions/vowel_sentences.xlsx"}


        emotional_sentences_path = {'de' : "res/de/conditions/emotional_sentences.xlsx", 'en' : "res/en/conditions/emotional_sentences.xlsx"}
        stroop_path = {'de' : "res/de/conditions/stroop.xlsx", 'en' : "res/en/conditions/stroop.xlsx"}
        POMS_path = {'de' : "res/de/conditions/emotions_questionaire.xlsx", 'en' : "res/en/conditions/emotions_questionaire.xlsx"}
        PANAS_path = {'de' : "res/de/conditions/PANAS_questionaire.xlsx", 'en' : "res/en/conditions/PANAS_questionaire.xlsx"}
        nasa_path = {'de' : "res/de/conditions/questions_nasa_txl.xlsx", 'en' : "res/en/conditions/questions_nasa_txl.xlsx"}
        reading_span_path = {'de' : "res/de/conditions/reading_span.xlsx", 'en' : "res/en/conditions/reading_span.xlsx"}
        nasa_comparison_path = {'de' : "res/de/conditions/nasa_comparison.xlsx", 'en' : "res/en/conditions/nasa_comparison.xlsx"}
  Routine instruction_dont_move
    TextComponent text_6
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $dont_move_instruction_text[language]
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    KeyboardComponent key_resp_48
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine dont_move_beep
    TextComponent text_7
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 180
      text [set every repeat] = $dont_move_text[language]
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    SoundComponent sound_1
      sound = 1000
      startVal [time (s)] = 180
      stopVal [duration (s)] = 0.5
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  Routine instruction_video
    TextComponent text_35
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      text [set every repeat] = $video_instruction_text[language]
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    KeyboardComponent key_resp_49
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine play_video
    MovieComponent movie
      backend = moviepy
      forceEndRoutine = True
      movie = res\video\Beautiful_15min.mp4
      size = [1680, 1049]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine sample_beeps_instruction
    KeyboardComponent key_resp_51
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_36
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $sample_beeps_instruction_text[language]
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  Routine sample_beep
    SoundComponent sound_3
      sound = 1000
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine sample_beeps_press_space
    TextComponent beeps_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $sample_beeps_text[language]
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    KeyboardComponent key_resp_50
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine introduction_60_sec_mood
    TextComponent text_3
      letterHeight = 0.03
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $instruction_60_sec_mood_text[language]
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    KeyboardComponent key_resp_12
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine routine_60_Sec_mood
    TextComponent mood_voice
      letterHeight = 0.03
      pos = (0, 0.25)
      startVal [time (s)] = 0
      text [set every repeat] = $mood_text[language]
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    MicrophoneComponent mood_60_secs
      channel = 0
      startVal [time (s)] = 0.5
      stereo = False
      stopVal [duration (s)] = 7200
      syncScreenRefresh = True
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    TextComponent Timer
      letterHeight = 0.05
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 60
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      text [set every frame]:
        $str(round(-routineTimer.getTime()-Timer.tStart)) + "\n\n" + seconds[language]
    KeyboardComponent key_resp_11
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 30
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    ImageComponent recording_image
      image = res\img\recording.png
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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  Routine emotional_sentence_preview
    TextComponent text_38
      disabled = True
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $emotional_sentence_preview_text[language] + "\n\n" + emotional_sentence + "\n\n" + act_emotion_text[language] + emotion + "\n\n" + start_recording_text[language]
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    KeyboardComponent key_resp_41
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_37
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $emotional_sentence_preview_text[language]
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    TextComponent text_41
      letterHeight = 0.06
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $emotional_sentence
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    TextComponent text_42
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $act_emotion_text[language]
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    TextComponent text_43
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      text [set every repeat] = $emotion
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    TextComponent text_44
      letterHeight = 0.05
      pos = (0, -0.15)
      startVal [time (s)] = 0.0
      text [set every repeat] = $start_recording_text[language]
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  Routine emotional_sentence_recording
    TextComponent text_39
      disabled = True
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $emotional_sentence_read_text[language] + "\n\n" + emotional_sentence + "\n\n" + act_emotion_text[language] + emotion + "\n\n" + stop_recording_text[language]
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    KeyboardComponent key_resp_42
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    MicrophoneComponent emotional_sentence_mic
      channel = 0
      startVal [time (s)] = 0.0
      stereo = False
      stopVal [duration (s)] = 7200
      syncScreenRefresh = True
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    TextComponent text_45
      letterHeight = 0.05
      pos = (0, -0.15)
      startVal [time (s)] = 0.0
      text [set every repeat] = $stop_recording_text[language]
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    TextComponent text_46
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      text [set every repeat] = $emotion
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    TextComponent text_47
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $act_emotion_text[language]
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    TextComponent text_48
      letterHeight = 0.06
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $emotional_sentence
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    TextComponent text_49
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $emotional_sentence_read_text[language]
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  Routine neutral_speech_start_mic_2
    CodeComponent code
      Code Type = Py
      Begin Routine:
        neutral_speech_mic2 = microphone.AdvAudioCapture(name='neutral_speech_mic2', saveDir=wavDirName, stereo=False, chnl=0)
        neutral_speech_mic2.record(sec=7200)
  Routine neutral_speech_recording_2
    TextComponent text_50
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $neutral_speech_text[language][neutral_speech2.thisN]
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    KeyboardComponent key_resp_52
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    MicrophoneComponent neutral_speech_mic_2
      channel = 0
      disabled = True
      startVal [time (s)] = 0.0
      stereo = False
      stopVal [duration (s)] = 3600
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  Routine neutral_speech_stop_mic_2
    CodeComponent code_19
      Code Type = Py
      Begin Routine:
        time.sleep(1)
        neutral_speech_mic2.stop()
  Routine sample_beep_2
    SoundComponent sound_8
      sound = 2000
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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Flow
  Routine instruction_texts_configuration_and_imports
  Routine choose_language
  Routine welcome_screen
  Routine sample_beeps_instruction
  Routine sample_beep
  Routine sample_beeps_press_space
  Routine sample_beep
  LoopInitiator trials_8 loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 2
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    Routine sample_beeps_press_space
    Routine sample_beep_2
  LoopTerminator trials_8
  LoopInitiator trials_2 loopType="TrialHandler"
    loopType = random
    nReps = 3
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    Routine time_synchronisation_training
  LoopTerminator trials_2
  LoopInitiator trials_3 loopType="TrialHandler"
    loopType = random
    nReps = 3
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    Routine time_synchronisation
  LoopTerminator trials_3
  Routine dominant_hand_info
  Routine audio_test
  Routine wait_for_experimenter
  Routine instruction_video
  Routine play_video
  Routine introduction_60_sec_mood
  Routine routine_60_Sec_mood
  Routine neutral_speech_instruction
  Routine neutral_speech_start_mic
  LoopInitiator neutral_speech loopType="TrialHandler"
    loopType = random
    nReps = 3
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    Routine neutral_speech_recording
  LoopTerminator neutral_speech
  Routine neutral_speech_stop_mic
  Routine emotional_sentences_introduction
  LoopInitiator emotional_sentences loopType="TrialHandler"
    conditionsFile = $emotional_sentences_path[language]
    loopType = random
    nReps = 1
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    LoopInitiator trials_5 loopType="TrialHandler"
      conditionsFile = $emotions_path[language]
      isTrials = False
      loopType = sequential
      nReps = 1
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      Routine emotional_sentence_preview
      Routine emotional_sentence_recording
    LoopTerminator trials_5
  LoopTerminator emotional_sentences
  Routine speaking_vowels_introduction
  LoopInitiator vowels_as_long_as_possible_trial loopType="TrialHandler"
    Selected rows = [0, 1]
    conditionsFile = $vowels_path[language]
    loopType = sequential
    nReps = 1
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    Routine phones_as_long_as_possible_preview
    Routine phones_as_long_possible_recording
  LoopTerminator vowels_as_long_as_possible_trial
  LoopInitiator vowels_5_secs loopType="TrialHandler"
    conditionsFile = $vowels_path[language]
    loopType = sequential
    nReps = 1
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    Routine phones_5_secs_preview
    Routine phones_5_secs_recording
  LoopTerminator vowels_5_secs
  Routine before_close_eyes
  Routine close_eyes
  Routine after_close_eyes
  LoopInitiator affective_slide_01 loopType="TrialHandler"
    loopType = random
    nReps = 1
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    Routine affective_slider
  LoopTerminator affective_slide_01
  LoopInitiator PANAS_01 loopType="TrialHandler"
    conditionsFile = $PANAS_path[language]
    loopType = sequential
    nReps = 1
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    Routine questionaire
  LoopTerminator PANAS_01
  LoopInitiator PANAS_01_german loopType="TrialHandler"
    conditionsFile = $PANAS_path[language]
    loopType = random
    nReps = 1
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    Routine questionaire_german
  LoopTerminator PANAS_01_german
  Routine instruction_reading_span_practice
  Routine before_reading_span_practice
  LoopInitiator reading_span_practice loopType="TrialHandler"
    loopType = random
    nReps = 1
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    LoopInitiator reading_span_practice_trials loopType="TrialHandler"
      Selected rows = $selected_rows_reading_span
      conditionsFile = $reading_span_path[language]
      isTrials = False
      loopType = random
      nReps = 1
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      Routine reading_span_number
      Routine reading_span_text_2
      Routine reading_span_feedback
    LoopTerminator reading_span_practice_trials
    LoopInitiator trials loopType="TrialHandler"
      isTrials = False
      loopType = random
      nReps = c_numbers_to_remember_practice[0]
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      Routine reading_span_say_numbers
      Routine reading_span_feedback_numbers
    LoopTerminator trials
  LoopTerminator reading_span_practice
  Routine instruction_reading_span
  LoopInitiator reading_span_whole_set loopType="TrialHandler"
    loopType = random
    nReps = reading_span_trial_count
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    Routine before_reading_span_trial
    LoopInitiator reading_span_trials loopType="TrialHandler"
      isTrials = False
      loopType = random
      nReps = len(c_numbers_to_remember)
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      Routine before_reading_span_number
      LoopInitiator trials_4 loopType="TrialHandler"
        Selected rows = $selected_rows_reading_span
        conditionsFile = $reading_span_path[language]
        isTrials = False
        loopType = random
        nReps = 1
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        Routine reading_span_number
        Routine reading_span_text_2
        Routine reading_span_feedback
      LoopTerminator trials_4
      LoopInitiator trials_7 loopType="TrialHandler"
        isTrials = False
        loopType = random
        nReps = c_numbers_to_remember[reading_span_trials.thisN]
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        Routine reading_span_say_numbers
        Routine reading_span_feedback_numbers
      LoopTerminator trials_7
    LoopTerminator reading_span_trials
    Routine reading_span_short_break
  LoopTerminator reading_span_whole_set
  LoopInitiator nasa_txl_01 loopType="TrialHandler"
    conditionsFile = $nasa_path[language]
    loopType = sequential
    nReps = 1
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    Routine nasa_txl_questionaire
  LoopTerminator nasa_txl_01
  LoopInitiator nasa_txl_01_german loopType="TrialHandler"
    conditionsFile = $nasa_path[language]
    loopType = random
    nReps = 1
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    Routine nasa_txl_questionaire_german
  LoopTerminator nasa_txl_01_german
  LoopInitiator nasa_comp_1 loopType="TrialHandler"
    conditionsFile = $nasa_comparison_path[language]
    loopType = random
    nReps = 1
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    Routine nasa_txl_comparison
  LoopTerminator nasa_comp_1
  Routine instructions_stroop
  Routine stroop_color_words
  Routine before_stroop_practise
  LoopInitiator stroop_practice loopType="TrialHandler"
    loopType = random
    nReps = len(stroop_color_words)
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    Routine stroop_practice_trial
  LoopTerminator stroop_practice
  Routine short_break_after_stroop_practice
  LoopInitiator stroop_repetition loopType="TrialHandler"
    loopType = random
    nReps = 3
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    Routine before_stroop_test
    Routine start_mic_stroop
    LoopInitiator stroop_test loopType="TrialHandler"
      isTrials = False
      loopType = fullRandom
      nReps = $len(stroop_color_words)
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      Routine stroop_trial
    LoopTerminator stroop_test
    Routine short_break_and_mic_stop
  LoopTerminator stroop_repetition
  Routine instructions_stroop_time_pressure
  Routine before_stroop_practise
  LoopInitiator stroop_timepressure_practice_trials loopType="TrialHandler"
    loopType = random
    nReps = len(stroop_color_words)
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    Routine stroop_timepressure_practice
  LoopTerminator stroop_timepressure_practice_trials
  Routine shot_break_after_stroop_timepressure_practice
  LoopInitiator stroop_timepressure_repetition loopType="TrialHandler"
    loopType = random
    nReps = 3
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    Routine before_stroop_test
    Routine start_mic_stroop_timepressure
    LoopInitiator stroop_timepressure_trials loopType="TrialHandler"
      loopType = random
      nReps = len(stroop_color_words)
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      Routine stroop_time_pressure_trial
    LoopTerminator stroop_timepressure_trials
    Routine short_break_timepressure
  LoopTerminator stroop_timepressure_repetition
  Routine instructions_stroop_dual
  Routine stroop_beep1
  Routine stroop_beep2
  Routine before_stroop_practise
  Routine before_stroop_dual
  LoopInitiator stroop_dual_task_practice loopType="TrialHandler"
    loopType = random
    nReps = len(stroop_color_words)
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    Routine stroop_dual_task_practice_routine
  LoopTerminator stroop_dual_task_practice
  Routine ask_for_num_high_pitches
  Routine num_high_pitches_feedback
  Routine short_break_after_stroop_dual_practice
  LoopInitiator stroop_dualtask_repetition loopType="TrialHandler"
    loopType = random
    nReps = 3
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    Routine before_stroop_test
    Routine before_stroop_dual
    Routine start_mic_stroop_dual
    LoopInitiator stroop_dual_trials loopType="TrialHandler"
      loopType = random
      nReps = len(stroop_color_words)
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      Routine stroop_dual_task_trial
    LoopTerminator stroop_dual_trials
    Routine ask_for_num_high_pitches
    Routine num_high_pitches_feedback
    Routine short_break_dual
  LoopTerminator stroop_dualtask_repetition
  LoopInitiator nasa_txl_02 loopType="TrialHandler"
    conditionsFile = $nasa_path[language]
    loopType = sequential
    nReps = 1
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    Routine nasa_txl_questionaire
  LoopTerminator nasa_txl_02
  LoopInitiator nasa_txl_02_german loopType="TrialHandler"
    conditionsFile = $nasa_path[language]
    loopType = random
    nReps = 1
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    Routine nasa_txl_questionaire_german
  LoopTerminator nasa_txl_02_german
  LoopInitiator nasa_comp_2 loopType="TrialHandler"
    conditionsFile = $nasa_comparison_path[language]
    loopType = random
    nReps = 1
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    Routine nasa_txl_comparison
  LoopTerminator nasa_comp_2
  Routine instructions_n_back
  Routine nback_practice_text
  Routine external_nback_practice
  Routine nback_start_text
  Routine external_nback
  LoopInitiator nasa_txl_03 loopType="TrialHandler"
    conditionsFile = $nasa_path[language]
    loopType = sequential
    nReps = 1
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    Routine nasa_txl_questionaire
  LoopTerminator nasa_txl_03
  LoopInitiator nasa_txl_03_german loopType="TrialHandler"
    conditionsFile = $nasa_path[language]
    loopType = random
    nReps = 1
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    Routine nasa_txl_questionaire_german
  LoopTerminator nasa_txl_03_german
  LoopInitiator nasa_comp_3 loopType="TrialHandler"
    conditionsFile = $nasa_comparison_path[language]
    loopType = random
    nReps = 1
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    Routine nasa_txl_comparison
  LoopTerminator nasa_comp_3
  LoopInitiator affective_slider_02 loopType="TrialHandler"
    loopType = random
    nReps = 1
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    Routine affective_slider
  LoopTerminator affective_slider_02
  LoopInitiator PANAS_02 loopType="TrialHandler"
    conditionsFile = $PANAS_path[language]
    loopType = random
    nReps = 1
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    Routine questionaire
  LoopTerminator PANAS_02
  LoopInitiator PANAS_02_german loopType="TrialHandler"
    conditionsFile = $PANAS_path[language]
    loopType = random
    nReps = 1
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    Routine questionaire_german
  LoopTerminator PANAS_02_german
  Routine introduction_60_sec_mood
  Routine routine_60_Sec_mood
  Routine neutral_speech_instruction
  Routine neutral_speech_start_mic_2
  LoopInitiator neutral_speech2 loopType="TrialHandler"
    loopType = sequential
    nReps = 3
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    Routine neutral_speech_recording_2
  LoopTerminator neutral_speech2
  Routine neutral_speech_stop_mic_2
  Routine eating_message
  Routine instruction_dont_move
  Routine dont_move_beep
  Routine after_close_eyes
  LoopInitiator affective_slider_03 loopType="TrialHandler"
    loopType = random
    nReps = 1
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    Routine affective_slider
  LoopTerminator affective_slider_03
  LoopInitiator PANAS_03 loopType="TrialHandler"
    conditionsFile = $PANAS_path[language]
    loopType = sequential
    nReps = 1
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    Routine questionaire
  LoopTerminator PANAS_03
  LoopInitiator PANAS_03_german loopType="TrialHandler"
    conditionsFile = $PANAS_path[language]
    loopType = random
    nReps = 1
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    Routine questionaire_german
  LoopTerminator PANAS_03_german
  Routine finish_message
